PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1300, 700]
  expName = Visual search
  keyboardBackend = ioHub
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Routines
  Routine trial2
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      units = pix
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    DotsComponent dots
      coherence = 0.5
      dir [set every repeat] = 0.0
      dotLife = 3
      dotSize = 250
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 4
      nDots = 200
      noiseDots = direction
      refreshDots = repeat
      signalDots = different
      speed = 0.002
      startVal [time (s)] = 0.0
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    TextComponent text1
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = O
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    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine trial
    PolygonComponent fixation1
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      letterHeight = 0.2
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = *
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random()> 0.5:
            num_distr = 10
            thisExp.addData('num_distr', num_distr)
        else:
            num_distr = 5
            thisExp.addData('num_distr', num_distr)

        distractors = []

        for i in range(num_distr):

            distr = visual.TextStim(win=win, name='distr',
                text='+',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=randint(0,360),
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=0.0);


            distractors.append(distr)


        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    MouseComponent mouse_2
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial2
  LoopTerminator trials_2
